CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:134
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop/PROJECT/workspace/load_data_csv/BATCH/Plate3
    Name of the file:load_data_pipeline7.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Site,Well
    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllACycles
    Image or measurement?:Image
    Select the first image:Cycle01_A
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_A
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_A
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_A
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_A
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_A
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_A
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_A
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_A
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_A
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:3|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllCCycles
    Image or measurement?:Image
    Select the first image:Cycle01_C
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_C
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_C
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_C
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_C
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_C
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_C
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_C
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_C
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_C
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:4|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllGCycles
    Image or measurement?:Image
    Select the first image:Cycle01_G
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_G
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_G
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_G
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_G
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_G
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_G
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_G
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_G
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_G
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:5|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllTCycles
    Image or measurement?:Image
    Select the first image:Cycle01_T
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_T
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_T
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_T
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_T
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_T
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_T
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_T
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_T
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_T
    Multiply the tenth image by:1.0
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:MeanOfAllACycles
    Name the output image:IllumMeanA
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:MeanOfAllCCycles
    Name the output image:IllumMeanC
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:MeanOfAllGCycles
    Name the output image:IllumMeanG
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:MeanOfAllTCycles
    Name the output image:IllumMeanT
    Select how the illumination function is calculated:Background
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    Block size:40
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:Cycle01_A
    Name the output image:Cycle01_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_A
    Name the output image:Cycle02_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_A
    Name the output image:Cycle03_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_A
    Name the output image:Cycle04_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_A
    Name the output image:Cycle05_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_A
    Name the output image:Cycle06_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_A
    Name the output image:Cycle07_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_A
    Name the output image:Cycle08_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle09_A
    Name the output image:Cycle09_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle10_A
    Name the output image:Cycle10_A_BackSub
    Select the illumination function:IllumMeanA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:11|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
    Select the input image:Cycle01_G
    Name the output image:Cycle01_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_G
    Name the output image:Cycle02_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_G
    Name the output image:Cycle03_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_G
    Name the output image:Cycle04_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_G
    Name the output image:Cycle05_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_G
    Name the output image:Cycle06_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_G
    Name the output image:Cycle07_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_G
    Name the output image:Cycle08_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle09_G
    Name the output image:Cycle09_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle10_G
    Name the output image:Cycle10_G_BackSub
    Select the illumination function:IllumMeanG
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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
    Select the input image:Cycle01_C
    Name the output image:Cycle01_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_C
    Name the output image:Cycle02_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_C
    Name the output image:Cycle03_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_C
    Name the output image:Cycle04_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_C
    Name the output image:Cycle05_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_C
    Name the output image:Cycle06_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_C
    Name the output image:Cycle07_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_C
    Name the output image:Cycle08_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle09_C
    Name the output image:Cycle09_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle10_C
    Name the output image:Cycle10_C_BackSub
    Select the illumination function:IllumMeanC
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:13|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
    Select the input image:Cycle01_T
    Name the output image:Cycle01_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle02_T
    Name the output image:Cycle02_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle03_T
    Name the output image:Cycle03_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle04_T
    Name the output image:Cycle04_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle05_T
    Name the output image:Cycle05_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle06_T
    Name the output image:Cycle06_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle07_T
    Name the output image:Cycle07_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle08_T
    Name the output image:Cycle08_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle09_T
    Name the output image:Cycle09_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Select the input image:Cycle10_T
    Name the output image:Cycle10_T_BackSub
    Select the illumination function:IllumMeanT
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:Cycle01_A_BackSub
    Name the output image:Cycle01_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Cycle01_C_BackSub
    Name the output image:Cycle01_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:Cycle01_G_BackSub
    Name the output image:Cycle01_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Cycle01_T_BackSub
    Name the output image:Cycle01_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:Cycle02_A_BackSub
    Name the output image:Cycle02_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:19|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
    Select the input image:Cycle02_C_BackSub
    Name the output image:Cycle02_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:20|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
    Select the input image:Cycle02_G_BackSub
    Name the output image:Cycle02_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:21|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
    Select the input image:Cycle02_T_BackSub
    Name the output image:Cycle02_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:22|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
    Select the input image:Cycle03_A_BackSub
    Name the output image:Cycle03_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:23|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
    Select the input image:Cycle03_C_BackSub
    Name the output image:Cycle03_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:24|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
    Select the input image:Cycle03_G_BackSub
    Name the output image:Cycle03_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:25|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
    Select the input image:Cycle03_T_BackSub
    Name the output image:Cycle03_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:26|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
    Select the input image:Cycle04_A_BackSub
    Name the output image:Cycle04_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:27|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
    Select the input image:Cycle04_C_BackSub
    Name the output image:Cycle04_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:28|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
    Select the input image:Cycle04_G_BackSub
    Name the output image:Cycle04_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:29|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
    Select the input image:Cycle04_T_BackSub
    Name the output image:Cycle04_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:30|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
    Select the input image:Cycle05_A_BackSub
    Name the output image:Cycle05_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:31|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
    Select the input image:Cycle05_C_BackSub
    Name the output image:Cycle05_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:32|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
    Select the input image:Cycle05_G_BackSub
    Name the output image:Cycle05_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:33|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
    Select the input image:Cycle05_T_BackSub
    Name the output image:Cycle05_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:34|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
    Select the input image:Cycle06_A_BackSub
    Name the output image:Cycle06_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:35|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
    Select the input image:Cycle06_C_BackSub
    Name the output image:Cycle06_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:36|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
    Select the input image:Cycle06_G_BackSub
    Name the output image:Cycle06_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:37|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
    Select the input image:Cycle06_T_BackSub
    Name the output image:Cycle06_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:38|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
    Select the input image:Cycle07_A_BackSub
    Name the output image:Cycle07_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:39|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
    Select the input image:Cycle07_C_BackSub
    Name the output image:Cycle07_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:40|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
    Select the input image:Cycle07_G_BackSub
    Name the output image:Cycle07_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:41|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
    Select the input image:Cycle07_T_BackSub
    Name the output image:Cycle07_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:42|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
    Select the input image:Cycle08_A_BackSub
    Name the output image:Cycle08_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:43|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
    Select the input image:Cycle08_C_BackSub
    Name the output image:Cycle08_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:44|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
    Select the input image:Cycle08_G_BackSub
    Name the output image:Cycle08_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:45|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
    Select the input image:Cycle08_T_BackSub
    Name the output image:Cycle08_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:46|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
    Select the input image:Cycle09_A_BackSub
    Name the output image:Cycle09_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:47|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
    Select the input image:Cycle09_C_BackSub
    Name the output image:Cycle09_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:48|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
    Select the input image:Cycle09_G_BackSub
    Name the output image:Cycle09_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:49|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
    Select the input image:Cycle09_T_BackSub
    Name the output image:Cycle09_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:50|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
    Select the input image:Cycle10_A_BackSub
    Name the output image:Cycle10_A_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:51|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
    Select the input image:Cycle10_C_BackSub
    Name the output image:Cycle10_C_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:52|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
    Select the input image:Cycle10_G_BackSub
    Name the output image:Cycle10_G_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:53|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
    Select the input image:Cycle10_T_BackSub
    Name the output image:Cycle10_T_BackSub_Enhance
    Select the operation:Enhance
    Feature size:4
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:54|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
    Operation:Standard Deviation
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:StDevOfAllACycles
    Image or measurement?:Image
    Select the first image:Cycle01_A_BackSub_Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_A_BackSub_Enhance
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_A_BackSub_Enhance
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_A_BackSub_Enhance
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_A_BackSub_Enhance
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_A_BackSub_Enhance
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_A_BackSub_Enhance
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_A_BackSub_Enhance
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_A_BackSub_Enhance
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_A_BackSub_Enhance
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:55|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
    Operation:Standard Deviation
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:StDevOfAllCCycles
    Image or measurement?:Image
    Select the first image:Cycle01_C_BackSub_Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_C_BackSub_Enhance
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_C_BackSub_Enhance
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_C_BackSub_Enhance
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_C_BackSub_Enhance
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_C_BackSub_Enhance
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_C_BackSub_Enhance
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_C_BackSub_Enhance
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_C_BackSub_Enhance
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_C_BackSub_Enhance
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:56|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
    Operation:Standard Deviation
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:StDevOfAllGCycles
    Image or measurement?:Image
    Select the first image:Cycle01_G_BackSub_Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_G_BackSub_Enhance
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_G_BackSub_Enhance
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_G_BackSub_Enhance
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_G_BackSub_Enhance
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_G_BackSub_Enhance
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_G_BackSub_Enhance
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_G_BackSub_Enhance
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_G_BackSub_Enhance
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_G_BackSub_Enhance
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:57|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
    Operation:Standard Deviation
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:StDevOfAllTCycles
    Image or measurement?:Image
    Select the first image:Cycle01_T_BackSub_Enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_T_BackSub_Enhance
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_T_BackSub_Enhance
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_T_BackSub_Enhance
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_T_BackSub_Enhance
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_T_BackSub_Enhance
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_T_BackSub_Enhance
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_T_BackSub_Enhance
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_T_BackSub_Enhance
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_T_BackSub_Enhance
    Multiply the tenth image by:1.0
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
ImageMath:[module_num:58|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MeanOfAllStDevs
    Image or measurement?:Image
    Select the first image:StDevOfAllACycles
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:StDevOfAllCCycles
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:StDevOfAllGCycles
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:StDevOfAllTCycles
    Multiply the fourth image by:1.0
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
ImageMath:[module_num:59|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
    Operation:Minimum
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MinimumAllCycles
    Image or measurement?:Image
    Select the first image:Cycle01_A
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Cycle02_A
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Cycle03_A
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Cycle04_A
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:Cycle05_A
    Multiply the fifth image by:1.0
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    Image or measurement?:Image
    Select the sixth image:Cycle06_A
    Multiply the sixth image by:1.0
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    Image or measurement?:Image
    Select the seventh image:Cycle07_A
    Multiply the seventh image by:1.0
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    Image or measurement?:Image
    Select the eighth image:Cycle08_A
    Multiply the eighth image by:1.0
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    Image or measurement?:Image
    Select the ninth image:Cycle09_A
    Multiply the ninth image by:1.0
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    Image or measurement?:Image
    Select the tenth image:Cycle10_A
    Multiply the tenth image by:1.0
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
Threshold:[module_num:60|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
    Select the input image:MinimumAllCycles
    Name the output image:EmptyEdges
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.0000001
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
IdentifyPrimaryObjects:[module_num:61|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enabled:False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
    Select the input image:SqrtDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):12,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
RunCellpose:[module_num:62|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
    Select the input image:Cycle01_DAPI
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:20
    Detection mode:nuclei
    Name the output object:Nuclei
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:No

MaskImage:[module_num:63|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notes:['']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
    Select the input image:MeanOfAllStDevs
    Name the output image:MaskedMeanStDevs
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:64|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
    Select the input image:MaskedMeanStDevs
    Name the output image:MaskedFoci
    Use objects or an image as a mask?:Image
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    Select image for mask:EmptyEdges
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:65|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cycle01_A
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.002,0.02
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:66|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enabled:False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
    Select the input image:MeanOfAllStDevs
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:67|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
    Select the input image:MaskedFoci
    Name the primary objects to be identified:PreFoci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0008,1.0
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    Lower outlier fraction:0.025
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:7
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
IdentifyPrimaryObjects:[module_num:68|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enabled:False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
    Select the input image:MaskedFoci
    Name the primary objects to be identified:StrictFoci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0000,1.0
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    Lower outlier fraction:0.025
    Upper outlier fraction:0.05
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:12
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
CompensateColors:[module_num:69|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
    Hidden:40
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle08_T
    Select an image to measure:Cycle09_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle09_A
    Select an image to measure:Cycle09_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle09_C
    Select an image to measure:Cycle09_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle09_G
    Select an image to measure:Cycle09_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle09_T
    Select an image to measure:Cycle10_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:PreCycle10_A
    Select an image to measure:Cycle10_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:PreCycle10_C
    Select an image to measure:Cycle10_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:PreCycle10_G
    Select an image to measure:Cycle10_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:PreCycle10_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:PreFoci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:4
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:No
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:Yes
    What size radius should be used for the DoG low sigma?:1

MeasureObjectIntensity:[module_num:70|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
    Select images to measure:PreCycle01_A, PreCycle01_C, PreCycle01_G, PreCycle01_T, PreCycle02_A, PreCycle02_C, PreCycle02_G, PreCycle02_T, PreCycle03_A, PreCycle03_C, PreCycle03_G, PreCycle03_T, PreCycle04_A, PreCycle04_C, PreCycle04_G, PreCycle04_T, PreCycle05_A, PreCycle05_C, PreCycle05_G, PreCycle05_T, PreCycle06_A, PreCycle06_C, PreCycle06_G, PreCycle06_T, PreCycle07_A, PreCycle07_C, PreCycle07_G, PreCycle07_T, PreCycle08_A, PreCycle08_C, PreCycle08_G, PreCycle08_T, PreCycle09_A, PreCycle09_C, PreCycle09_G, PreCycle09_T, PreCycle10_A, PreCycle10_C, PreCycle10_G, PreCycle10_T
    Select objects to measure:PreFoci

CallBarcodes:[module_num:71|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
    Number of cycles:10
    Input object name:PreFoci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_PreCycle01_A
    Input data file location:Default Input Folder|Documents/projects/PROJECT/Batch2
    Name of the file:Barcodes.csv
    Select the column containing barcodes to match against:sgRNA
    Select the column containing gene/transcript barcode names:gene_symbol
    Retain an image of the barcodes color coded by call?:No
    Enter the called barcode image name:Barcodes_IntValues
    Retain an image of the barcodes color coded by score match?:No
    Enter the barcode score image name:BarcodeScores_IntValues
    Do you have an empty vector barcode you would like to add to the barcode list?:No
    What is the empty vector sequence?:AAAAAAAAAAAAAAA

FilterObjects_StringMatch:[module_num:72|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
    Select the objects to filter:PreFoci
    Name the output objects:Foci
    String to use for filter:AAAAAA
    Filter method:Filter out strings containing
    Measurement:Barcode_BarcodeCalled
    Additional string count:3
    String to use for additional filter:CCCCCC
    String to use for additional filter:GGGGGG
    String to use for additional filter:TTTTTT

CompensateColors:[module_num:73|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
    Hidden:40
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle08_T
    Select an image to measure:Cycle09_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle09_A
    Select an image to measure:Cycle09_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle09_C
    Select an image to measure:Cycle09_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle09_G
    Select an image to measure:Cycle09_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle09_T
    Select an image to measure:Cycle10_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle10_A
    Select an image to measure:Cycle10_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle10_C
    Select an image to measure:Cycle10_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle10_G
    Select an image to measure:Cycle10_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle10_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:1
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:4
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:No
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:Yes
    What size radius should be used for the DoG low sigma?:1

MeasureObjectIntensity:[module_num:74|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
    Select images to measure:CorrCycle01_A, CorrCycle01_C, CorrCycle01_G, CorrCycle01_T, CorrCycle02_A, CorrCycle02_C, CorrCycle02_G, CorrCycle02_T, CorrCycle03_A, CorrCycle03_C, CorrCycle03_G, CorrCycle03_T, CorrCycle04_A, CorrCycle04_C, CorrCycle04_G, CorrCycle04_T, CorrCycle05_A, CorrCycle05_C, CorrCycle05_G, CorrCycle05_T, CorrCycle06_A, CorrCycle06_C, CorrCycle06_G, CorrCycle06_T, CorrCycle07_A, CorrCycle07_C, CorrCycle07_G, CorrCycle07_T, CorrCycle08_A, CorrCycle08_C, CorrCycle08_G, CorrCycle08_T, CorrCycle09_A, CorrCycle09_C, CorrCycle09_G, CorrCycle09_T, CorrCycle10_A, CorrCycle10_C, CorrCycle10_G, CorrCycle10_T
    Select objects to measure:Foci

CallBarcodes:[module_num:75|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
    Number of cycles:10
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A
    Input data file location:Default Input Folder|Documents/projects/PROJECT/Batch2
    Name of the file:Barcodes.csv
    Select the column containing barcodes to match against:sgRNA
    Select the column containing gene/transcript barcode names:gene_symbol
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues
    Do you have an empty vector barcode you would like to add to the barcode list?:No
    What is the empty vector sequence?:AAAAAAAAAAAAAAA

CompensateColors:[module_num:76|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enabled:False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
    Hidden:40
    Hidden:1
    Select an image to measure:Cycle01_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle01_A
    Select an image to measure:Cycle02_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle02_A
    Select an image to measure:Cycle03_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle03_A
    Select an image to measure:Cycle04_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle04_A
    Select an image to measure:Cycle05_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle05_A
    Select an image to measure:Cycle06_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle06_A
    Select an image to measure:Cycle07_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle07_A
    Select an image to measure:Cycle08_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle08_A
    Select an image to measure:Cycle01_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle01_C
    Select an image to measure:Cycle02_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle02_C
    Select an image to measure:Cycle03_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle03_C
    Select an image to measure:Cycle04_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle04_C
    Select an image to measure:Cycle05_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle05_C
    Select an image to measure:Cycle06_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle06_C
    Select an image to measure:Cycle07_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle07_C
    Select an image to measure:Cycle08_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle08_C
    Select an image to measure:Cycle01_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle01_G
    Select an image to measure:Cycle02_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle02_G
    Select an image to measure:Cycle03_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle03_G
    Select an image to measure:Cycle04_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle04_G
    Select an image to measure:Cycle05_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle05_G
    Select an image to measure:Cycle06_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle06_G
    Select an image to measure:Cycle07_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle07_G
    Select an image to measure:Cycle08_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle08_G
    Select an image to measure:Cycle01_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle01_T
    Select an image to measure:Cycle02_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle02_T
    Select an image to measure:Cycle03_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle03_T
    Select an image to measure:Cycle04_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle04_T
    Select an image to measure:Cycle05_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle05_T
    Select an image to measure:Cycle06_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle06_T
    Select an image to measure:Cycle07_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle07_T
    Select an image to measure:Cycle08_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle08_T
    Select an image to measure:Cycle09_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle09_A
    Select an image to measure:Cycle09_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle09_C
    Select an image to measure:Cycle09_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle09_G
    Select an image to measure:Cycle09_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle09_T
    Select an image to measure:Cycle10_A_BackSub
    What compensation class does this image belong to?:1
    Select an output image name:CorrCycle10_A
    Select an image to measure:Cycle10_C_BackSub
    What compensation class does this image belong to?:2
    Select an output image name:CorrCycle10_C
    Select an image to measure:Cycle10_G_BackSub
    What compensation class does this image belong to?:3
    Select an output image name:CorrCycle10_G
    Select an image to measure:Cycle10_T_BackSub
    What compensation class does this image belong to?:4
    Select an output image name:CorrCycle10_T
    Select where to perform color compensation:Within objects
    Select an object to perform compensation within:Foci
    Should individual images be rescaled 0-1 before compensating pre-masking or on unmasked images?:No
    Should images be rescaled 0-1 before compensating but after masking to objects?:No
    Should histogram matching be performed between the image groups?:Yes, post-masking to objects
    What compensation class should serve as the template histogram?:4
    Should images be rescaled 0-1 after compensating?:No
    Should the images be divided by a scalar based on group percentiles:No
    What percentile should be used for multiplication:4
    Should the images have a tophat filter applied before correction?:No
    What size radius should be used for the tophat filter?:No
    Should the images have a Laplacian of Gaussian filter applied before correction?:Yes
    What size radius should be used for the LoG filter?:1
    Should the images have a Difference of Gaussians filter applied before correction?:No
    What size sigma should be used for the DoG low sigma?:Yes
    What size radius should be used for the DoG low sigma?:1

MeasureObjectIntensity:[module_num:77|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enabled:False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
    Select images to measure:CorrCycle01_A, CorrCycle01_C, CorrCycle01_G, CorrCycle01_T, CorrCycle02_A, CorrCycle02_C, CorrCycle02_G, CorrCycle02_T, CorrCycle03_A, CorrCycle03_C, CorrCycle03_G, CorrCycle03_T, CorrCycle04_A, CorrCycle04_C, CorrCycle04_G, CorrCycle04_T, CorrCycle05_A, CorrCycle05_C, CorrCycle05_G, CorrCycle05_T, CorrCycle06_A, CorrCycle06_C, CorrCycle06_G, CorrCycle06_T, CorrCycle07_A, CorrCycle07_C, CorrCycle07_G, CorrCycle07_T, CorrCycle08_A, CorrCycle08_C, CorrCycle08_G, CorrCycle08_T, CorrCycle09_A, CorrCycle09_C, CorrCycle09_G, CorrCycle09_T, CorrCycle10_A, CorrCycle10_C, CorrCycle10_G, CorrCycle10_T
    Select objects to measure:Foci

CallBarcodes:[module_num:78|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enabled:False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
    Number of cycles:10
    Input object name:Foci
    Select one of the measures from Cycle 1 to use for calling:Intensity_MaxIntensity_CorrCycle01_A
    Input data file location:Default Input Folder|Desktop\metadata\20200211_6W_CP151A1
    Name of the file:Barcodes.csv
    Select the column containing barcodes to match against:sgRNA
    Select the column containing gene/transcript barcode names:gene_symbol
    Retain an image of the barcodes color coded by call?:Yes
    Enter the called barcode image name:Barcodes_IntValues
    Retain an image of the barcodes color coded by score match?:Yes
    Enter the barcode score image name:BarcodeScores_IntValues
    Do you have an empty vector barcode you would like to add to the barcode list?:No
    What is the empty vector sequence?:AAAAAAAAAAAAAAA

FilterObjects:[module_num:79|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
    Select the objects to filter:Foci
    Name the output objects:BarcodeFoci
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Number_Object_Number
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
ImageMath:[module_num:80|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Barcodes
    Image or measurement?:Image
    Select the first image:Barcodes_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
ImageMath:[module_num:81|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Barcodes_Scores
    Image or measurement?:Image
    Select the first image:BarcodeScores_IntValues
    Multiply the first image by:0.000015259021897
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:82|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
    Select images to measure:Barcodes_Scores, Barcodes_Barcodes
    Select objects to measure:BarcodeFoci

RelateObjects:[module_num:83|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enabled:False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
    Parent objects:Cells
    Child objects:BarcodeFoci
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SaveImages:[module_num:84|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
    Select the type of image to save:Image
    Select the image to save:Cycle01_DAPI
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_DAPI
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:85|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle01_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:86|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle01_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:87|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle01_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:88|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle01_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle01_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:89|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle02_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle02_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle02_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle02_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle02_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle03_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle03_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle03_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle03_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle03_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:97|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle04_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:98|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle04_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:99|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle04_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:100|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle04_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle04_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:101|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle05_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:102|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle05_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:103|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle05_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:104|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle05_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle05_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:105|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle06_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:106|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle06_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:107|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle06_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:108|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle06_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle06_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:109|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle07_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:110|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle07_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:111|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle07_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:112|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle07_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle07_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:113|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle08_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:114|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle08_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:115|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle08_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:116|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle08_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle08_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:117|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle09_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:118|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle09_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:119|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle09_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:120|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle09_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle09_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:121|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle10_A
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_A
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:122|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle10_C
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_C
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:123|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle10_G
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_G
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:124|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
    Select the type of image to save:Image
    Select the image to save:CorrCycle10_T
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_Cycle10_T
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    Saved file format:tiff
    Output file location:Default Output Folder|Cycle01
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:125|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BarcodePreprocessing_
    Overwrite existing files without warning?:No
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
CalculateMath:[module_num:126|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enabled:False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
    Name the output measurement:Divide20
    Operation:None
    Select the first operand measurement type:Image
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    Select the first operand measurement:Metadata_Site
    Multiply the above operand by:.05
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:127|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enabled:False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
    Name the output measurement:Divide20floor
    Operation:None
    Select the first operand measurement type:Image
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    Select the first operand measurement:Metadata_Site
    Multiply the above operand by:.05
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Rounded down to the next-lowest integer
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:128|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enabled:False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
    Name the output measurement:Divide20diff
    Operation:Subtract
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_Divide20
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_Divide20floor
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:Not rounded
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    Constrain the result to an upper bound?:No
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
FlagImage:[module_num:129|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Divide20
    Name the flag:Divide20Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Math_Divide20diff
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:.0000000001
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    Ignore flag skips on last cycle?:No

ImageMath:[module_num:130|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:StdSqRt
    Image or measurement?:Image
    Select the image:MeanOfAllStDevs
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
RescaleIntensity:[module_num:131|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enabled:False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
    Select the input image:StdSqRt
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:132|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:StDev_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Foci

SaveImages:[module_num:133|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:StDev_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_StDev_Overlay
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:134|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:StDev_Overlay
    Select method for constructing file names:Single name
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    Enter single file name:Plate_\g<Plate>_Well_\g<Well_Value>_Site_\g<Site>_StDev_Overlay
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|../overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
