CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Downloads
    Name of the file:load_data_pipeline3.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:ConfluentRegions
    Typical diameter of objects, in pixel units (Min,Max):500,5000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:3|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
    Select the input image:DNA
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:4|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
    Select the input image:Phalloidin
    Name the output image:MaskedPhalloidin
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

MaskImage:[module_num:5|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
    Select the input image:ZO1
    Name the output image:MaskedZO1
    Use objects or an image as a mask?:Objects
    Select object for mask:ConfluentRegions
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:MaskedDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:PreCells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedZO1
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:.000001,1
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:PreCells
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskedZO1
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RescaleIntensity:[module_num:9|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
    Select the input image:DNA
    Name the output image:RescaleDAPIPaintingForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:Phalloidin
    Name the output image:RescalePhalloidinForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:ZO1
    Name the output image:RescaleZO1forvis
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:12|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleZO1forvis
    Select the image to be colored green:RescalePhalloidinForVis
    Select the image to be colored blue:RescaleDAPIPaintingForVis
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RescaleIntensity:[module_num:13|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
    Select the input image:ColorImage
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,.25
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Cells
    Select outline color:#FF8000
    Select objects to display:ConfluentRegions

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SegmentCheck
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SegmentationCheck_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:17|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:E:\
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/
    Local root path:C:\Users\Administrator\Desktop
    Cluster root path:/home/ubuntu/bucket/projects/2018_11_20_Periscope_Calico/workspace
